PsychoPy2experiment version="2022.2.3"
Settings
  Audio lib = pygame
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = ConjSemantic
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    CodeComponent preparations
      Code Type = Auto->JS
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      Before Experiment:
        import os
        import random
        import numpy as np
        import pandas as pd
        from itertools import islice
        from functools import reduce
        from operator import add

        def chunked_iterable(iterable, size):
            it = iter(iterable)
            return iter(lambda: tuple(islice(it, size)), ())

        def shuffle(fnames, aud_dir, n_topics=7, n_sents=12):
            chunked_fnames = [list(chunk) for chunk in chunked_iterable(fnames, n_sents)]

            shuffled_fnames = list()
            for i in range(n_sents):
                chunk = list()
                for j in range(n_topics):
                    fname = np.random.choice(chunked_fnames[j])
                    chunk.append(fname)
                    chunked_fnames[j].remove(fname)
                shuffled_fnames.append(chunk)

            for i in range(len(shuffled_fnames)):
                if i == 0:
                    random.shuffle(shuffled_fnames[i])
                else:
                    random.shuffle(shuffled_fnames[i])
                    while shuffled_fnames[i-1][-1].split('_')[0] == shuffled_fnames[i][0].split('_')[0]:
                        random.shuffle(shuffled_fnames[i])

            shuffled_fnames = reduce(add, shuffled_fnames)
            shuffled_fnames = [
                os.path.join(aud_dir, fname) for fname in shuffled_fnames
            ]

            return shuffled_fnames

        aud_dir = './stimulus/aud/volcano_tts/aud_final'
        num_topics = 7
        num_sents_per_topic = 12 # 4 * 3

        # Prepare blocks
        fnames_designed_block = os.listdir(aud_dir)
        fnames_designed_block = shuffle(fnames_designed_block, aud_dir)

        num_trials_per_block = 21
        blocks = list(chunked_iterable(
            fnames_designed_block,
            num_trials_per_block
        ))
        random.shuffle(blocks)

        # Define cue
        cue = '句子是否正确'
      Begin Experiment:
        # Initialize
        block_counter = 0
        trial_counter = 0
        n_blocks = len(blocks)
        n_trials = len(blocks[0])

        if_prompt = 1
        block_cue = f'Block {block_counter + 1} 即将开始\n' + \
                    '请注意问题:\n\n' + \
                    cue
      End Routine:
        if not expInfo['participant'].endswith('run1'):
            if_prompt = 0
    TextComponent welcome_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = 欢迎参加本次实验
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  Routine Prompt
    TextComponent prompt_text1
      letterHeight = 0.06
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 4.0
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      text:
        本次实验分为4个组块
        每个组块中你会听到一系列句子
    TextComponent prompt_text2
      letterHeight = 0.06
      startVal [time (s)] = 4.2
      stopVal [duration (s)] = 8.0
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      text:
        请根据你听到的句子
        对如下问题做出判断：

        “句子是否正确”

        并按照指示进行按键
    TextComponent prompt_text3
      letterHeight = 0.06
      startVal [time (s)] = 12.3
      stopVal [duration (s)] = 6.0
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      text:
        每个组块结束后，会出现

        “休息”

        的字样，表明这一组实验已经结束
        并进入持续5s的间隔
    TextComponent prompt_text4
      letterHeight = 0.06
      startVal [time (s)] = 18.4
      stopVal [duration (s)] = 3.0
      text = 现在，实验正式开始
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    TextComponent prompt_text5
      letterHeight = 0.05
      startVal [time (s)] = 21.4
      stopVal [duration (s)] = 1.0
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  Routine Trial
    CodeComponent trial_code
      Code Type = Auto->JS
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      Before Experiment:
        # Define response cue
        response_cue = ['正确', '不正确']

        from pypixxlib.propixx import PROPixxCTRL
        from pypixxlib._libdpx import DPxUpdateRegCache, DPxSelectDevice, DPxStopAllScheds, DPxSetDoutValue

        bitmask = 0x00FFFFFF

        PROPixxCTRL()
        DPxSelectDevice('PROPixx Ctrl')
        DPxStopAllScheds()
        DPxSetDoutValue(0, bitmask)
        DPxUpdateRegCache()
      Begin Routine:
        # Audio File Name
        aud_file = blocks[block_counter][trial_counter]
        aud_fname = os.path.basename(aud_file)
        block_type = aud_fname.split('_')[1]
        Trials_loop.addData(
            'Stim_fname',
            aud_fname
        )

        # Random Inter Trial Intervval
        iti_time = random.random() * 0.2 + 0.9

        # Random Key Response
        correct = None
        incorrect = None
        if 'sent-1' in aud_fname or 'sent-4' in aud_fname:
            correct = response_cue[0]
            incorrect = response_cue[1]
        else:
            correct = response_cue[1]
            incorrect = response_cue[0]

        rand_num = random.random()

        left = correct
        right = incorrect
        if rand_num < 0.5:
            left = '左：' + correct
            right = '右：' + incorrect
            correct_key = '1'
        else:
            left = '左：' + incorrect
            right = '右：' + correct
            correct_key = '4'

        # Set Trigger
        stim_topic_index = int(
            aud_fname.split('_')[0][-1]
        )
        stim_block_index = int(
            aud_fname.split('_')[1][-1]
        )
        stim_sent_index = int(
            aud_fname.replace('.wav', '').split('_')[2][-1]
        )

        trigger_value = (stim_topic_index - 1) * num_sents_per_topic \
                        + (stim_block_index - 1) * num_sents_per_topic / 3 \
                        + stim_sent_index
        trigger_value = int(trigger_value)

        Trials_loop.addData(
            'Stim_trigger',
            trigger_value
        )
        DPxSetDoutValue(trigger_value, bitmask)
        DPxUpdateRegCache()
        core.wait(0.3)
        DPxSetDoutValue(0, bitmask)
        DPxUpdateRegCache()
      End Experiment:
        DPxStopAllScheds()
        DPxSetDoutValue(0, bitmask)
        DPxUpdateRegCache()
      End Routine:
        trial_counter += 1
    SoundComponent sound_stim
      sound [set every repeat] = $aud_file
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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    PolygonComponent polygon
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      shape = cross
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.6
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  Routine Cue
    CodeComponent cue_code
      Code Type = Auto->JS
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      Begin Routine:
        trial_counter = 0
        n_trials = len(blocks[block_counter])

        iti = 1.0

        block_cue = f'Block {block_counter + 1} 即将开始\n' + \
                    '请注意问题:\n\n' + \
                    cue
    TextComponent cue_text
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.08
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $block_cue
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  Routine ITI
    TextComponent iti_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine IBI
    CodeComponent ibi_code
      Code Type = Auto->JS
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      End Routine:
        block_counter += 1
    TextComponent ibi_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = 休息5秒
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  Routine Waiting
    TextComponent waiting_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = 实验即将开始，请稍候
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    KeyboardComponent waiting_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Fixation
    PolygonComponent polygon_2
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      shape = cross
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Response
    CodeComponent key_response_code
      Code Type = Auto->JS
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      Begin Routine:
        trigger_value = 100

        DPxSetDoutValue(trigger_value, bitmask)
        DPxUpdateRegCache()
        core.wait(0.1)
        DPxSetDoutValue(0, bitmask)
        DPxUpdateRegCache()
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '1','4'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    TextComponent response_prompt
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.08
      pos = (0, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = 请回答
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    TextComponent left_cue
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.08
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $left
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    TextComponent right_cue
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.08
      pos = (0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $right
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  Routine End
    TextComponent end_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        本次实验结束
        感谢您的参与
Flow
  Routine Waiting
  Routine Welcome
  LoopInitiator skip_prompt loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = if_prompt
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    Routine Prompt
  LoopTerminator skip_prompt
  LoopInitiator Blocks_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = n_blocks
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    Routine Cue
    LoopInitiator Trials_loop loopType="TrialHandler"
      loopType = sequential
      nReps = n_trials
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      Routine Fixation
      Routine Trial
      Routine Response
      Routine ITI
    LoopTerminator Trials_loop
    Routine IBI
  LoopTerminator Blocks_loop
  Routine End
